
//  ******************************************************
//
//     File generated by: neuroConstruct v1.5.1
//
//     Generally replicates hoc for Cell Type as exported from
//     NEURON's Cell Builder, together with some neuroConstruct
//     specific helper/info procedures, e.g. toString(), netInfo()
//
//  ******************************************************


begintemplate SampleCell

public init, topol, basic_shape, subsets, geom, memb
public synlist, x, y, z, position, connect2target

public reference, type, description, name
strdef reference, type, description, name

public toString, netInfo

public all

objref synlist
objref all
objref stringFuncs

public soma_group
objref soma_group
public dendrite_group
objref dendrite_group
public axon_group
objref axon_group

proc init() {
    topol()
    subsets()
    geom()
    biophys()
    geom_nseg()
    synlist = new List()
    x = y = z = 0
    reference = $s1
    type = $s2
    description = $s3
    
    strdef indexNum
    stringFuncs = new StringFunctions()
    stringFuncs.tail(reference, "_", indexNum)
    while (stringFuncs.substr( indexNum, "_")>=0) {
        stringFuncs.tail(indexNum, "_", indexNum)
    }
    
    sprint(name, "%s", type)
}

create Soma
public Soma
create mainDendSec
public mainDendSec
create subDendSec1
public subDendSec1
create subDendSec2
public subDendSec2
create subDendSec3
public subDendSec3
create mainAxonSec
public mainAxonSec

proc topol() {
    connect mainDendSec(0), Soma(0.5)
    connect subDendSec1(0), mainDendSec(1.0)
    connect subDendSec2(0), mainDendSec(1.0)
    connect subDendSec3(0), mainDendSec(1.0)
    connect mainAxonSec(0), Soma(0.5)
    basic_shape()
}

proc basic_shape() {
    Soma {pt3dclear() pt3dadd(0.0, -8.0, 0.0, 16.0) pt3dadd(0.0, 8.0, 0.0, 16.0)}
    mainDendSec {pt3dclear() pt3dadd(0.0, 0.0, 0.0, 2.0) pt3dadd(20.0, 0.0, 0.0, 2.0)}
    subDendSec1 {pt3dclear() pt3dadd(20.0, 0.0, 0.0, 2.0) pt3dadd(40.0, 15.0, 0.0, 2.0)}
    subDendSec2 {pt3dclear() pt3dadd(20.0, 0.0, 0.0, 2.0) pt3dadd(45.0, 0.0, 0.0, 2.0)}
    subDendSec3 {pt3dclear() pt3dadd(20.0, 0.0, 0.0, 2.0) pt3dadd(40.0, -15.0, 0.0, 2.0)}
    mainAxonSec {pt3dclear() pt3dadd(0.0, 0.0, 0.0, 1.0) pt3dadd(-30.0, 0.0, 0.0, 1.0)}
}

proc subsets() { local i

    all = new SectionList()


    soma_group = new SectionList()

    Soma soma_group.append()


    dendrite_group = new SectionList()

    mainDendSec dendrite_group.append()
    subDendSec1 dendrite_group.append()
    subDendSec2 dendrite_group.append()
    subDendSec3 dendrite_group.append()


    axon_group = new SectionList()

    mainAxonSec axon_group.append()


    Soma all.append()
    mainDendSec all.append()
    subDendSec1 all.append()
    subDendSec2 all.append()
    subDendSec3 all.append()
    mainAxonSec all.append()
}

proc geom() {
}

proc biophys() {
    forsec all cm = 1.0
    forsec all Ra = 30.0

    forsec all {         insert KConductance  { gmax_KConductance = 0.036 }          ek = -77.0  // note: this is val from ChannelML, may be reset later

    }

    forsec all {         insert NaConductance  { gmax_NaConductance = 0.12 }          ena = 50.0  // note: this is val from ChannelML, may be reset later

    }

    forsec all {         insert LeakConductance  { gmax_LeakConductance = 3.0E-4 }  
    }

}

proc geom_nseg() {
}


proc position() { local i
    forsec all {
        for i = 0, n3d()-1 {
            pt3dchange(i, $1+x3d(i), $2+y3d(i), $3+z3d(i), diam3d(i))
        }
    }
    x = $1  y = $2  z = $3
}

proc connect2target() {   //$o1 target point process, $o2 returned NetCon

    Soma $o2 = new NetCon(&v(1), $o1)
}

proc toString() {
    strdef info
    sprint(info, "Cell ref: %s (%s), at: (%d, %d, %d)", reference, name, x, y, z)
    print info
}

proc netInfo() {
    strdef info
    sprint(info, "Cell reference: %s, type: %s", reference, type)
    print "--------  ",info
    print "    There are ", synlist.count(), " connections in ", synlist
    for i=0,synlist.count()-1 {
        print "        Connection from ", synlist.o[i].precell, " to: ", synlist.o[i].postcell
        print "        Pre:   Weight: ", synlist.o[i].weight, ", delay: ", synlist.o[i].delay, ", threshold: ", synlist.o[i].threshold 
        print "        Post:  ", synlist.o[i].syn(), ", gmax: ", synlist.o[i].syn().gmax , ", e: ", synlist.o[i].syn().e , ", rise time: ", synlist.o[i].syn().tau_rise , ", decay time: ", synlist.o[i].syn().tau_decay 
    print " "
    }
    
    
    
    print "--------  "
    print " "
}


endtemplate SampleCell

